PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'Num': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = paradigm1
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Routines
  Routine introduction1
    ImageComponent introduction1_1
      image = document\introduction1_1.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    ImageComponent introduction2_1
      image = document\introduction2_1.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine device_use_time1
    RatingScaleComponent rating
      categoryChoices = 1,2,3,4,5,6,7,8,9,10,11,12,12+
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, 0
      saveStartStop = False
      scaleDescription = 请根据您每日手机、电脑等社交媒体使用时间选择最接近的使用时长
      size = 1.5
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent image
      image = document\device_use_time.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (2.15,0.4)
      startVal [time (s)] = 0.0
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  Routine time_percition
    TextComponent concentration
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent trumpet
      image = document\laba.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = $emerge
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    SoundComponent sound_1
      hamming = False
      saveStartStop = False
      sound = A
      startVal [time (s)] = 2
      stopVal [duration (s)] = $emerge
      syncScreenRefresh = False
      volume = 5
  Routine repeat_time
    TextComponent text1
      color = black
      font = hei
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        声音正在复制
    SoundComponent sound_2
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_copy
      image = document\laba.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent key_resp_sound_end
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine repeat_start
    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        请按下左键开始声音复制
        请按下右键结束声音复制
    KeyboardComponent repeat_sound_start
      allowedKeys = 'left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction3
    ImageComponent introduction3_1
      image = document\introduction3_1.png
      saveStartStop = False
      size = (1.76,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent text_4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 实验结束，感谢您的参与！
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  Routine one_month_3
    TextComponent text_2
      color = red
      letterHeight = 0.07
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 立即获得金额
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    TextComponent instance
      color = blue
      letterHeight = 0.07
      pos = (-0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $x2
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    TextComponent text_3
      color = green
      letterHeight = 0.07
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 一个月后金额
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    TextComponent one_month
      color = blue
      letterHeight = 0.07
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 200
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        x2=100
        n2=0.25
      End Routine:
        if 'left' in one_month_key.keys:
            x2 = round(x2-200*n2,2)
            n2 = n2/2
        if 'right' in one_month_key.keys:
            x2 = round(x2+200*n2,2)
            n2 = n2/2
    KeyboardComponent one_month_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine one_week
    TextComponent text_5
      color = red
      letterHeight = 0.07
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 立即获得
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    TextComponent text_6
      color = blue
      letterHeight = 0.07
      pos = (-0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $x1
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    TextComponent text_7
      color = yellow
      letterHeight = 0.07
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 一周后金额
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    TextComponent text_8
      color = blue
      letterHeight = 0.07
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 200
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        x1=100
        n1=0.25
      End Routine:
        if 'left' in one_week_key.keys:
            x1 = round(x1-200*n1,2)
            n1 = n1/2
        if 'right' in one_week_key.keys:
            x1 = round(x1+200*n1,2)
            n1 = n1/2
    KeyboardComponent one_week_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine six_months
    TextComponent text_10
      color = red
      letterHeight = 0.07
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 立即获得金额
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    TextComponent text_11
      color = coral
      letterHeight = 0.07
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        六个月后金额
    TextComponent text_12
      color = blue
      letterHeight = 0.07
      pos = (-0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $x3
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    TextComponent text_13
      color = blue
      letterHeight = 0.07
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 200
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    KeyboardComponent six_months_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        x3=100
        n3=0.25
      End Routine:
        if 'left' in six_months_key.keys:
            x3 = round(x3-200*n3,2)
            n3 = n3/2
        if 'right' in six_months_key.keys:
            x3 = round(x3+200*n3,2)
            n3 = n3/2
  Routine introduction4
    ImageComponent image_2
      image = document\introduction4_1.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine device_questionaire
    ImageComponent device_question
      image [set every repeat] = $question
      saveStartStop = False
      size = (1.76,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent question_key
      allowedKeys = '1','2','3','4','5'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine introduction1
  Routine device_use_time1
  Routine introduction4
  LoopInitiator loop5 loopType="TrialHandler"
    conditionsFile = document\questionaire.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'question': '/document/questionaire/qust_1.png'},
      {'question': '/document/questionaire/qust_2.png'},
      {'question': '/document/questionaire/qust_3.png'},
      {'question': '/document/questionaire/qust_4.png'},
      {'question': '/document/questionaire/qust_5.png'},
      {'question': '/document/questionaire/qust_6.png'},
      {'question': '/document/questionaire/qust_7.png'},
      {'question': '/document/questionaire/qust_8.png'},
      {'question': '/document/questionaire/qust_9.png'},
      {'question': '/document/questionaire/qust_10.png'},
      {'question': '/document/questionaire/qust_11.png'},
      {'question': '/document/questionaire/qust_12.png'},
      {'question': '/document/questionaire/qust_13.png'},
      {'question': '/document/questionaire/qust_14.png'},
      {'question': '/document/questionaire/qust_15.png'}]
    Routine device_questionaire
  LoopTerminator loop5
  Routine introduction2
  LoopInitiator loop1 loopType="TrialHandler"
    conditionsFile = document\material.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'emerge': 0.5, 'text_emerge': 1.5, 'time': 1},
      {'emerge': 1, 'text_emerge': 2, 'time': 2},
      {'emerge': 1.5, 'text_emerge': 2.5, 'time': 3},
      {'emerge': 2, 'text_emerge': 3, 'time': 4}]
    Routine time_percition
    Routine repeat_start
    Routine repeat_time
  LoopTerminator loop1
  Routine introduction3
  LoopInitiator loop3 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine one_week
  LoopTerminator loop3
  LoopInitiator loop2 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine one_month_3
  LoopTerminator loop2
  LoopInitiator loop4 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine six_months
  LoopTerminator loop4
  Routine thanks
